---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1024
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\P275674\\Desktop"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#808080"

define feedback BreakBlock
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You finished the block [blockno]. You can rest. Press a button to start next set of trials. " x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average precision of the first target was [T1precision_perc]%." x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average precision of the second target was [T2precision_perc]%." x=0 y=128 z_index=0

define inline_script CanvasCreate
	set description "Executes Python code"
	set _run ""
	___prepare__
	#Empty Canvas for multiple usage 
	cnvs_fix = Canvas()
	cnvs_fix.fixdot()
	cnvs_empty=Canvas()
	
	#feedback canvass
	cnvs_feedbackpositive=Canvas()
	cnvs_feedbackpositive+=Text(':)')
	cnvs_feedbacknegative=Canvas()
	cnvs_feedbacknegative+=Text(':(')
	
	#ResponsePrompt Canvas
	T1response_cnvs = Canvas()
	T2response_cnvs = Canvas()
	#my_canvas.text("Please fill the circle with the first targets color", y=slider_y-100) 
	T1response_cnvs.text("Click to accept color...", y=230) 
	T1response_cnvs.text("Adjust T1 color", y=-230) 
	T1response_cnvs['T1colorwheel']=Image(exp.pool['colorwheel_uniform.png'])
	
	T2response_cnvs.text("Click to accept color...", y=230) 
	T2response_cnvs.text("Adjust T2 color", y=-230) 
	T2response_cnvs['T2colorwheel']=Image(exp.pool['colorwheel_uniform.png'])
	__end__

define logger DataLogger
	set description "Logs experimental data"
	set auto_log yes

define inline_script Demographics
	set description "Executes Python code"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.age != u'' and var.handedness != u'no'
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in u'0123456789'
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_gender= Label(u'Your gender')
	checkbox_male = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	label_handedness=Label(u'Your handedness')
	checkbox_right = Checkbox(text=u'right handed', group=u'handedness', var=u'handedness')
	checkbox_left = Checkbox(text=u'left handed', group=u'handedness', var=u'handedness')
	label_age = Label(u'Your age')
	# Specify a key filter so that only digits are accepted as text input
	input_age = TextInput(stub=u'Age here …', var=u'age', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1], cols=[1,1,1,1])
	#my_form.set_widget(label_session, (0, 0))
	#my_form.set_widget(checkbox_session1, (1, 0))
	#my_form.set_widget(checkbox_session2, (2, 0))
	#my_form.set_widget(checkbox_session3, (3, 0))
	my_form.set_widget(label_gender, (0, 1))
	my_form.set_widget(checkbox_male, (1, 1))
	my_form.set_widget(checkbox_female, (2, 1))
	
	my_form.set_widget(label_handedness, (0, 2))
	my_form.set_widget(checkbox_right, (1, 2))
	my_form.set_widget(checkbox_left, (2, 2))
	
	my_form.set_widget(label_age, (0, 3))
	my_form.set_widget(input_age, (1, 3), colspan=2)
	my_form.set_widget(button_ok, (1, 4))
	my_form._exec()
	__end__
	set _prepare ""

define sketchpad EndExperiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Experiment has finished. Thanks for your participation!" x=0 y=0 z_index=0

define loop Experimentaltrials
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 64
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ISI long
	setcycle 0 T1_location up
	setcycle 0 T2_location left
	setcycle 0 T1_Y -96
	setcycle 0 T1_Dist_Y 96
	setcycle 0 T2_X -96
	setcycle 0 T2_Dist_X 96
	setcycle 1 ISI short
	setcycle 1 T1_location up
	setcycle 1 T2_location left
	setcycle 1 T1_Y -96
	setcycle 1 T1_Dist_Y 96
	setcycle 1 T2_X -96
	setcycle 1 T2_Dist_X 96
	setcycle 2 ISI long
	setcycle 2 T1_location down
	setcycle 2 T2_location left
	setcycle 2 T1_Y 96
	setcycle 2 T1_Dist_Y -96
	setcycle 2 T2_X -96
	setcycle 2 T2_Dist_X 96
	setcycle 3 ISI short
	setcycle 3 T1_location down
	setcycle 3 T2_location left
	setcycle 3 T1_Y 96
	setcycle 3 T1_Dist_Y -96
	setcycle 3 T2_X -96
	setcycle 3 T2_Dist_X 96
	setcycle 4 ISI long
	setcycle 4 T1_location up
	setcycle 4 T2_location right
	setcycle 4 T1_Y -96
	setcycle 4 T1_Dist_Y 96
	setcycle 4 T2_X 96
	setcycle 4 T2_Dist_X -96
	setcycle 5 ISI short
	setcycle 5 T1_location up
	setcycle 5 T2_location right
	setcycle 5 T1_Y -96
	setcycle 5 T1_Dist_Y 96
	setcycle 5 T2_X 96
	setcycle 5 T2_Dist_X -96
	setcycle 6 ISI long
	setcycle 6 T1_location down
	setcycle 6 T2_location right
	setcycle 6 T1_Y 96
	setcycle 6 T1_Dist_Y -96
	setcycle 6 T2_X 96
	setcycle 6 T2_Dist_X -96
	setcycle 7 ISI short
	setcycle 7 T1_location down
	setcycle 7 T2_location right
	setcycle 7 T1_Y 96
	setcycle 7 T1_Dist_Y -96
	setcycle 7 T2_X 96
	setcycle 7 T2_Dist_X -96
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	run TrialSequence

define inline_script FixationStimuliPrep
	set description "Executes Python code"
	___run__
	#TrialSequence
	cnvs_fix.show()
	self.sleep(var.fixationduration)
	T1_cnvs.show()
	self.sleep(var.Tduration)
	cnvs_fix.show()
	self.sleep(var.ISIarray)
	T1_dist_cnvs.show()
	self.sleep(var.Mduration)
	cnvs_fix.show()
	self.sleep(var.ISIduration)
	T2_cnvs.show()
	self.sleep(var.Tduration)
	cnvs_fix.show()
	self.sleep(var.ISIarray)
	T2_dist_cnvs.show()
	self.sleep(var.Mduration)
	cnvs_fix.show()
	self.sleep(495)
	__end__
	___prepare__
	#random time for fixation duration
	var.fixationduration=random.randint(300, 500)
	#ISI duration
	if  var.ISI=='short':
		var.ISIduration=var.ISI_short
	else:
		var.ISIduration=var.ISI_long
	#T2maskrandomization
	random_indexT2mask=random.sample(range(1,len(maskslist)),6)
	var.T2Mask_1=maskslist[random_indexT2mask[0]]
	var.T2Mask_2=maskslist[random_indexT2mask[1]]
	var.T2Mask_3=maskslist[random_indexT2mask[2]]
	var.T1Mask_1=maskslist[random_indexT2mask[3]]
	var.T1Mask_2=maskslist[random_indexT2mask[4]]
	var.T1Mask_3=maskslist[random_indexT2mask[5]]
	#block number
	if var.trialnumber%var.number_trials_block==0:
		var.blockno=var.blockno+1	
	#trialnumber
	var.trialnumber=var.trialnumber+1
	#Targetcolors
	var.T1color = randint(0,360)
	if var.T1color<20:
		var.T2color = random.randint(var.T1color+20, 340+var.T1color)
	elif var.T1color >340:
		var.T2color = random.randint(var.T1color-340,var.T1color-20)
	else:
		var.T2color = random.choice(list(range(0, var.T1color-20)) + list(range(var.T1color+20, 360)))
	
	var.T1colorcircle=u''+color_conversions.convert_color(color_objects.LabColor(70, np.cos(math.radians(var.T1color))*38, np.sin(math.radians(var.T1color))*38), color_objects.AppleRGBColor).get_rgb_hex()
	var.T2colorcircle=u''+color_conversions.convert_color(color_objects.LabColor(70, np.cos(math.radians(var.T2color))*38, np.sin(math.radians(var.T2color))*38), color_objects.AppleRGBColor).get_rgb_hex()
	#Prepare 4 canvas for stimuli presentation
	#
	T1_cnvs=Canvas()
	T1_cnvs+=Circle(0, var.T1_Y, 40, color=var.T1colorcircle, size=80, fill=True)
	T1_cnvs+=Image(exp.pool[var.T1Mask_1],x=0, y=var.T1_Dist_Y)
	T1_cnvs.fixdot()
	#
	T1_dist_cnvs=Canvas()
	T1_dist_cnvs+=Image(exp.pool[var.T1Mask_2],x=0, y=96)
	T1_dist_cnvs+=Image(exp.pool[var.T1Mask_3],x=0, y=-96)
	T1_dist_cnvs.fixdot()
	#
	T2_cnvs=Canvas()
	T2_cnvs+=Circle(var.T2_X, 0, 40, color=var.T2colorcircle, size=80, fill=True)
	T2_cnvs+=Image(exp.pool[var.T2Mask_1],x=var.T2_Dist_X, y=0)
	T2_cnvs.fixdot()
	#
	T2_dist_cnvs=Canvas()
	T2_dist_cnvs+=Image(exp.pool[var.T2Mask_2],x=96, y=0)
	T2_dist_cnvs+=Image(exp.pool[var.T2Mask_3],x=-96, y=0)
	T2_dist_cnvs.fixdot()
	#ResponseScreen Prep
	lifeCanvas = Canvas()
	lifeCanvas2 = Canvas()
	#Update T1 and T2 value depending on the color wheel rotation
	var.T1value=(var.T1color)
	var.T2value=(var.T2color)
	if var.T1value<0:
		var.T1value=var.T1value+360
	if var.T2value<0:
		var.T2value=var.T2value+360
	__end__

define sketchpad PracticeEnd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You completed practice trials. If you have any questions about the study, please call the researcher and the questions. Press a button to start experimental trials. " x=0 y=0 z_index=0

define sketchpad PracticeTrialsStart
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Practice trials will start immediately when you press a button." x=0 y=0 z_index=0

define sketchpad StartExperimentalTrials
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press a button to start the experimental trials. You will not see feedback in the experimental trials, and the blocks are relatively longer compared to practice trials. " x=0 y=0 z_index=0

define inline_script T1Resp
	set description "Executes Python code"
	___run__
	my_mouse = mouse(timeout=20)
	my_mouse.show_cursor(True)
	my_mouse.set_pos(pos=(0,0))
	T1start_time = clock.time()
	my_mouse.flush()
	var.T1colorcirclerespscreen=u'rgb(255,255,255)'
	
	while True:
		pos, time = my_mouse.get_pos()
		x, y = pos
		my_mouse.set_visible()
		lifeCanvas.copy(T1response_cnvs)
	#	if sqrt(x**2+y**2)>250.0 and sqrt(x**2+y**2)<350.0:
		if sqrt(x**2+y**2)>120 and sqrt(x**2+y**2)<200:
			var.T1colorcirclerespscreen=u''+color_conversions.convert_color(color_objects.LabColor(70, np.cos((math.atan2(x,y)))*38, np.sin((math.atan2(x,y)))*38), color_objects.AppleRGBColor).get_rgb_hex()
		lifeCanvas.circle(0, 0, 40, color=var.T1colorcirclerespscreen, fill=True)
		lifeCanvas.show()
		button, mouseposition, timestamp = my_mouse.get_click()
		if button is not None:
			x1,y1=mouseposition
			T1endtime=timestamp
			var.T1responseangle=math.degrees(math.atan2(x1,  y1))
			var.T1RT=T1endtime-T1start_time
			break
	my_mouse.set_pos(pos=(0,0))
	
	if var.T1responseangle<0:
		var.T1responseangle+=360	
	var.T1errorangle=abs(var.T1responseangle-var.T1value)
	if var.T1errorangle>180:
		var.T1errorangle=360-var.T1errorangle
	
	T1precisionlist[var.trialnumber-1]=var.T1errorangle
	
	my_mouse.show_cursor(False)
	
	if  var.T1errorangle<40 and var.trialtype==0:
		cnvs_feedbackpositive.show()
		self.sleep(145)
	elif var.T1errorangle>=40 and var.trialtype==0:
		cnvs_feedbacknegative.show()
		self.sleep(145)
	
	cnvs_empty.show()
	self.sleep(195)
	__end__
	set _prepare ""

define inline_script T2Resp
	set description "Executes Python code"
	___run__
	my_mouse = mouse(timeout=20)
	my_mouse.show_cursor(True)
	my_mouse.set_pos(pos=(0,0))
	T2start_time = clock.time()
	#responsecollection
	my_mouse.flush()
	var.T2colorcirclerespscreen=u'rgb(255,255,255)'
	while True:
		pos, time = my_mouse.get_pos()
		x, y = pos
		my_mouse.set_visible()
		lifeCanvas2.copy(T2response_cnvs)
		if sqrt(x**2+y**2)>120 and sqrt(x**2+y**2)<200:
			var.T2colorcirclerespscreen=u''+color_conversions.convert_color(color_objects.LabColor(70, np.cos((math.atan2(x,y)))*38, np.sin((math.atan2(x,y)))*38), color_objects.AppleRGBColor).get_rgb_hex()
		lifeCanvas2.circle(0, 0, 40, color=var.T2colorcirclerespscreen, fill=True)
		lifeCanvas2.show()
		button, mouseposition, timestamp = my_mouse.get_click()
		if button is not None:
			x1,y1=mouseposition
			T2endtime=timestamp
			T2RT=T2endtime-T2start_time
			var.T2responseangle=math.degrees(math.atan2(x1,  y1))
			break
	my_mouse.set_pos(pos=(0,0))
	#savevariables		
	if var.T2responseangle<0:
		var.T2responseangle+=360	
	var.T2errorangle=abs(var.T2responseangle-var.T2value)
	if var.T2errorangle>180:
		var.T2errorangle=360-var.T2errorangle
	T2precisionlist[var.trialnumber-1]=var.T2errorangle
	my_mouse.show_cursor(False)
	#feedbackscreen
	if  var.T2errorangle<40 and var.trialtype==0:
		cnvs_feedbackpositive.show()
		self.sleep(145)
	elif var.T2errorangle>=40 and var.trialtype==0:
		cnvs_feedbacknegative.show()
		self.sleep(145)
	cnvs_empty.show()
	self.sleep(195)
	__end__
	set _prepare ""

define sequence TrialSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run FixationStimuliPrep always
	run T1Resp always
	run T2Resp always
	run blockfeedback "[trialnumber]%[number_trials_block]=0"
	run DataLogger always
	run BreakBlock "[trialnumber]%[number_trials_block]=0"

define inline_script VariableReset
	set description "Executes Python code"
	___run__
	var.trialtype=1
	var.trialnumber=0
	var.blockno=0
	T1precisionlist=numpy.zeros(640) #total number of trials in experimental blocks
	T2precisionlist=numpy.zeros(640)
	var.number_trials_block=64
	var.totaltrials=640
	var.totalblocks=var.totaltrials/var.number_trials_block
	__end__
	set _prepare ""

define inline_script Variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	#libraries need for the python.
	import math
	import numpy
	import random 
	from math import sqrt
	from random import randrange
	from random import randint
	from random import choice
	import numpy as np
	from colour import Color
	from colour import make_color_factory, HSL_equivalence, RGB_color_picker
	import scipy
	import colorsys
	import colormath
	from colormath import color_objects
	from colormath import color_conversions
	#duration of displays
	var.Tduration=85
	var.Mduration=85
	var.ISI_short=55
	var.ISI_long=605
	var.ISIarray=5
	#default values of key variables. each trial these numbers change.
	var.trialtype=0 #the first block is practice block, then it becomes experimental blocks after the first block with the code written on TrialTypeNumber2
	var.trialnumber=0 
	#targetletter
	#T2masklist
	maskslist=['Mask (102).jpg','Mask (103).jpg','Mask (104).jpg','Mask (105).jpg','Mask (106).jpg','Mask (107).jpg','Mask (108).jpg','Mask (109).jpg','Mask (110).jpg','Mask (111).jpg','Mask (112).jpg','Mask (113).jpg','Mask (114).jpg','Mask (115).jpg','Mask (116).jpg','Mask (117).jpg','Mask (118).jpg','Mask (119).jpg','Mask (120).jpg','Mask (121).jpg','Mask (122).jpg','Mask (123).jpg','Mask (124).jpg','Mask (125).jpg','Mask (126).jpg','Mask (127).jpg','Mask (128).jpg','Mask (129).jpg','Mask (130).jpg','Mask (131).jpg','Mask (132).jpg','Mask (133).jpg','Mask (134).jpg','Mask (135).jpg','Mask (136).jpg','Mask (137).jpg','Mask (138).jpg','Mask (139).jpg','Mask (140).jpg','Mask (141).jpg','Mask (142).jpg','Mask (143).jpg','Mask (144).jpg','Mask (145).jpg','Mask (146).jpg','Mask (147).jpg','Mask (148).jpg','Mask (149).jpg','Mask (150).jpg','Mask (1).jpg','Mask (2).jpg','Mask (3).jpg','Mask (4).jpg','Mask (5).jpg','Mask (6).jpg','Mask (7).jpg','Mask (8).jpg','Mask (9).jpg','Mask (10).jpg','Mask (11).jpg','Mask (12).jpg','Mask (13).jpg','Mask (14).jpg','Mask (15).jpg','Mask (16).jpg','Mask (17).jpg','Mask (18).jpg','Mask (19).jpg','Mask (20).jpg','Mask (21).jpg','Mask (22).jpg','Mask (23).jpg','Mask (24).jpg','Mask (25).jpg','Mask (26).jpg','Mask (27).jpg','Mask (28).jpg','Mask (29).jpg','Mask (30).jpg','Mask (31).jpg','Mask (32).jpg','Mask (33).jpg','Mask (34).jpg','Mask (35).jpg','Mask (36).jpg','Mask (37).jpg','Mask (38).jpg','Mask (39).jpg','Mask (40).jpg','Mask (41).jpg','Mask (42).jpg','Mask (43).jpg','Mask (44).jpg','Mask (45).jpg','Mask (46).jpg','Mask (47).jpg','Mask (48).jpg','Mask (49).jpg','Mask (50).jpg','Mask (51).jpg','Mask (52).jpg','Mask (53).jpg','Mask (54).jpg','Mask (55).jpg','Mask (56).jpg','Mask (57).jpg','Mask (58).jpg','Mask (59).jpg','Mask (60).jpg','Mask (61).jpg','Mask (62).jpg','Mask (63).jpg','Mask (64).jpg','Mask (65).jpg','Mask (66).jpg','Mask (67).jpg','Mask (68).jpg','Mask (69).jpg','Mask (70).jpg','Mask (71).jpg','Mask (72).jpg','Mask (73).jpg','Mask (74).jpg','Mask (75).jpg','Mask (76).jpg','Mask (77).jpg','Mask (78).jpg','Mask (79).jpg','Mask (80).jpg','Mask (81).jpg','Mask (82).jpg','Mask (83).jpg','Mask (84).jpg','Mask (85).jpg','Mask (86).jpg','Mask (87).jpg','Mask (88).jpg','Mask (89).jpg','Mask (90).jpg','Mask (91).jpg','Mask (92).jpg','Mask (93).jpg','Mask (94).jpg','Mask (95).jpg','Mask (96).jpg','Mask (97).jpg','Mask (98).jpg','Mask (99).jpg','Mask (100).jpg','Mask (101).jpg']
	#blocknumber
	var.trialnumber=0
	var.blockno=0
	
	#feedback variables
	T1precisionlist=numpy.zeros(32) #total number of trials in practice block
	T2precisionlist=numpy.zeros(32)
	var.number_trials_block=16 #numberoftrials in a block
	var.totaltrials=32
	var.totalblocks=var.totaltrials/var.number_trials_block
	__end__

define inline_script blockfeedback
	set description "Executes Python code"
	___run__
	if var.trialnumber%var.number_trials_block==0:
		var.averageprecisionT1=numpy.mean(T1precisionlist[(var.blockno-1)*(var.number_trials_block):(var.blockno*(var.number_trials_block))])
		var.T1precision_perc=((180.0-var.averageprecisionT1)/180)*100
		var.averageprecisionT2=numpy.mean(T2precisionlist[(var.blockno-1)*(var.number_trials_block):(var.blockno*(var.number_trials_block))])
		var.T2precision_perc=((180.0-var.averageprecisionT2)/180)*100
	__end__
	___prepare__
	'''
	
	sx=0-((50*var.totalblocks)/2)
	sy=-150
	ex=0+((50*var.totalblocks)/2)
	ey=-150
	
	
	Block_feedback=Canvas()
	Block_feedback+=Line(sx, sy, ex, ey)
	Block_feedback+=Line(sx, sy, sx, ey-100)
	Block_feedback+=Line(sx, -sy, ex, -ey)
	Block_feedback+=Line(sx, -sy, sx, -ey-100)
	
	for i in range(1, var.totalblocks+1):
		if i<(var.totalblocks+1.0)/2.0:
			Block_feedback.fixdot(x=0-(45*i), y=sy)
		else:
			Block_feedback.fixdot(x=0+(45*i), y=sy)
			
	for i in range(1, var.totalblocks+1):
		Block_feedback.fixdot(x=sx+(i*45), y=sy+var.T1precision_perc[i-1])
		Block_feedback.fixdot(x=sx+(i*45), y=-sy+var.T2precision_perc[i-1])
	
	'''
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run Demographics always
	run Variables always
	run PracticeTrialsStart always
	run CanvasCreate always
	run practicetrials always
	run PracticeEnd always
	run VariableReset always
	run StartExperimentalTrials always
	run Experimentaltrials always
	run EndExperiment always

define loop practicetrials
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ISI long
	setcycle 0 T1_location up
	setcycle 0 T2_location left
	setcycle 0 T1_Y -96
	setcycle 0 T1_Dist_Y 96
	setcycle 0 T2_X -96
	setcycle 0 T2_Dist_X 96
	setcycle 1 ISI short
	setcycle 1 T1_location up
	setcycle 1 T2_location left
	setcycle 1 T1_Y -96
	setcycle 1 T1_Dist_Y 96
	setcycle 1 T2_X -96
	setcycle 1 T2_Dist_X 96
	setcycle 2 ISI long
	setcycle 2 T1_location down
	setcycle 2 T2_location left
	setcycle 2 T1_Y 96
	setcycle 2 T1_Dist_Y -96
	setcycle 2 T2_X -96
	setcycle 2 T2_Dist_X 96
	setcycle 3 ISI short
	setcycle 3 T1_location down
	setcycle 3 T2_location left
	setcycle 3 T1_Y 96
	setcycle 3 T1_Dist_Y -96
	setcycle 3 T2_X -96
	setcycle 3 T2_Dist_X 96
	setcycle 4 ISI long
	setcycle 4 T1_location up
	setcycle 4 T2_location right
	setcycle 4 T1_Y -96
	setcycle 4 T1_Dist_Y 96
	setcycle 4 T2_X 96
	setcycle 4 T2_Dist_X -96
	setcycle 5 ISI short
	setcycle 5 T1_location up
	setcycle 5 T2_location right
	setcycle 5 T1_Y -96
	setcycle 5 T1_Dist_Y 96
	setcycle 5 T2_X 96
	setcycle 5 T2_Dist_X -96
	setcycle 6 ISI long
	setcycle 6 T1_location down
	setcycle 6 T2_location right
	setcycle 6 T1_Y 96
	setcycle 6 T1_Dist_Y -96
	setcycle 6 T2_X 96
	setcycle 6 T2_Dist_X -96
	setcycle 7 ISI short
	setcycle 7 T1_location down
	setcycle 7 T2_location right
	setcycle 7 T1_Y 96
	setcycle 7 T1_Dist_Y -96
	setcycle 7 T2_X 96
	setcycle 7 T2_Dist_X -96
	setcycle 8 ISI long
	setcycle 8 T1_location up
	setcycle 8 T2_location left
	setcycle 8 T1_Y -96
	setcycle 8 T1_Dist_Y 96
	setcycle 8 T2_X -96
	setcycle 8 T2_Dist_X 96
	setcycle 9 ISI short
	setcycle 9 T1_location up
	setcycle 9 T2_location left
	setcycle 9 T1_Y -96
	setcycle 9 T1_Dist_Y 96
	setcycle 9 T2_X -96
	setcycle 9 T2_Dist_X 96
	setcycle 10 ISI long
	setcycle 10 T1_location down
	setcycle 10 T2_location left
	setcycle 10 T1_Y 96
	setcycle 10 T1_Dist_Y -96
	setcycle 10 T2_X -96
	setcycle 10 T2_Dist_X 96
	setcycle 11 ISI short
	setcycle 11 T1_location down
	setcycle 11 T2_location left
	setcycle 11 T1_Y 96
	setcycle 11 T1_Dist_Y -96
	setcycle 11 T2_X -96
	setcycle 11 T2_Dist_X 96
	setcycle 12 ISI long
	setcycle 12 T1_location up
	setcycle 12 T2_location right
	setcycle 12 T1_Y -96
	setcycle 12 T1_Dist_Y 96
	setcycle 12 T2_X 96
	setcycle 12 T2_Dist_X -96
	setcycle 13 ISI short
	setcycle 13 T1_location up
	setcycle 13 T2_location right
	setcycle 13 T1_Y -96
	setcycle 13 T1_Dist_Y 96
	setcycle 13 T2_X 96
	setcycle 13 T2_Dist_X -96
	setcycle 14 ISI long
	setcycle 14 T1_location down
	setcycle 14 T2_location right
	setcycle 14 T1_Y 96
	setcycle 14 T1_Dist_Y -96
	setcycle 14 T2_X 96
	setcycle 14 T2_Dist_X -96
	setcycle 15 ISI short
	setcycle 15 T1_location down
	setcycle 15 T2_location right
	setcycle 15 T1_Y 96
	setcycle 15 T1_Dist_Y -96
	setcycle 15 T2_X 96
	setcycle 15 T2_Dist_X -96
	setcycle 16 ISI long
	setcycle 16 T1_location up
	setcycle 16 T2_location left
	setcycle 16 T1_Y -96
	setcycle 16 T1_Dist_Y 96
	setcycle 16 T2_X -96
	setcycle 16 T2_Dist_X 96
	setcycle 17 ISI short
	setcycle 17 T1_location up
	setcycle 17 T2_location left
	setcycle 17 T1_Y -96
	setcycle 17 T1_Dist_Y 96
	setcycle 17 T2_X -96
	setcycle 17 T2_Dist_X 96
	setcycle 18 ISI long
	setcycle 18 T1_location down
	setcycle 18 T2_location left
	setcycle 18 T1_Y 96
	setcycle 18 T1_Dist_Y -96
	setcycle 18 T2_X -96
	setcycle 18 T2_Dist_X 96
	setcycle 19 ISI short
	setcycle 19 T1_location down
	setcycle 19 T2_location left
	setcycle 19 T1_Y 96
	setcycle 19 T1_Dist_Y -96
	setcycle 19 T2_X -96
	setcycle 19 T2_Dist_X 96
	setcycle 20 ISI long
	setcycle 20 T1_location up
	setcycle 20 T2_location right
	setcycle 20 T1_Y -96
	setcycle 20 T1_Dist_Y 96
	setcycle 20 T2_X 96
	setcycle 20 T2_Dist_X -96
	setcycle 21 ISI short
	setcycle 21 T1_location up
	setcycle 21 T2_location right
	setcycle 21 T1_Y -96
	setcycle 21 T1_Dist_Y 96
	setcycle 21 T2_X 96
	setcycle 21 T2_Dist_X -96
	setcycle 22 ISI long
	setcycle 22 T1_location down
	setcycle 22 T2_location right
	setcycle 22 T1_Y 96
	setcycle 22 T1_Dist_Y -96
	setcycle 22 T2_X 96
	setcycle 22 T2_Dist_X -96
	setcycle 23 ISI short
	setcycle 23 T1_location down
	setcycle 23 T2_location right
	setcycle 23 T1_Y 96
	setcycle 23 T1_Dist_Y -96
	setcycle 23 T2_X 96
	setcycle 23 T2_Dist_X -96
	setcycle 24 ISI long
	setcycle 24 T1_location up
	setcycle 24 T2_location left
	setcycle 24 T1_Y -96
	setcycle 24 T1_Dist_Y 96
	setcycle 24 T2_X -96
	setcycle 24 T2_Dist_X 96
	setcycle 25 ISI short
	setcycle 25 T1_location up
	setcycle 25 T2_location left
	setcycle 25 T1_Y -96
	setcycle 25 T1_Dist_Y 96
	setcycle 25 T2_X -96
	setcycle 25 T2_Dist_X 96
	setcycle 26 ISI long
	setcycle 26 T1_location down
	setcycle 26 T2_location left
	setcycle 26 T1_Y 96
	setcycle 26 T1_Dist_Y -96
	setcycle 26 T2_X -96
	setcycle 26 T2_Dist_X 96
	setcycle 27 ISI short
	setcycle 27 T1_location down
	setcycle 27 T2_location left
	setcycle 27 T1_Y 96
	setcycle 27 T1_Dist_Y -96
	setcycle 27 T2_X -96
	setcycle 27 T2_Dist_X 96
	setcycle 28 ISI long
	setcycle 28 T1_location up
	setcycle 28 T2_location right
	setcycle 28 T1_Y -96
	setcycle 28 T1_Dist_Y 96
	setcycle 28 T2_X 96
	setcycle 28 T2_Dist_X -96
	setcycle 29 ISI short
	setcycle 29 T1_location up
	setcycle 29 T2_location right
	setcycle 29 T1_Y -96
	setcycle 29 T1_Dist_Y 96
	setcycle 29 T2_X 96
	setcycle 29 T2_Dist_X -96
	setcycle 30 ISI long
	setcycle 30 T1_location down
	setcycle 30 T2_location right
	setcycle 30 T1_Y 96
	setcycle 30 T1_Dist_Y -96
	setcycle 30 T2_X 96
	setcycle 30 T2_Dist_X -96
	setcycle 31 ISI short
	setcycle 31 T1_location down
	setcycle 31 T2_location right
	setcycle 31 T1_Y 96
	setcycle 31 T1_Dist_Y -96
	setcycle 31 T2_X 96
	setcycle 31 T2_Dist_X -96
	run TrialSequence

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome to this experiment, press a button to start the experiment. " x=0 y=0 z_index=0

