---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1024
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\ahmet\\Desktop\\GABATASKS"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#c0c0c0"

define sketchpad Break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You finished a block of trials. Press a button to continue next block of trials." x=32 y=0 z_index=0

define inline_script CreateCanvas
	set description "Executes Python code"
	set _run ""
	___prepare__
	#empty canvas
	empty_cnvs=Canvas()
	#fixation dot canvas 
	fixcanvas=Canvas()
	fixcanvas.fixdot(color='black')
	#ISI canvas
	ISIcanvas=Canvas()
	ISIcanvas.fixdot(color='black')
	#feedback canvas
	'''
	cnvs_positivefeedback=Canvas() # size of the circle can be changed
	cnvs_positivefeedback.circle(0, 0, 10, fill=True, color='green')
	cnvs_negativefeedback=Canvas()
	cnvs_negativefeedback.circle(0, 0, 10, fill=True, color='red')
	
	'''
	cnvs_positivefeedback=Canvas()
	cnvs_positivefeedback+=Text(':)', font_size =32, color='black')
	cnvs_negativefeedback=Canvas()
	cnvs_negativefeedback+=Text(':(', font_size =32, color='black')
	__end__

define inline_script Demographics
	set description "Executes Python code"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.age != u'' and var.handedness != u'no' and var.session!=u'no'
	
	
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in ['0','1','2','3','4','5','6','7','8','9', 'backspace']
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	#label_session= Label(u'Session')
	#checkbox_session1 = Checkbox(text=u'1', group=u'session', var=u'session')
	#checkbox_session2 = Checkbox(text=u'2', group=u'session', var=u'session')
	#checkbox_session3 = Checkbox(text=u'3', group=u'session', var=u'session')
	label_gender= Label(u'Your gender')
	checkbox_male = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	label_handedness=Label(u'Your handedness')
	checkbox_right = Checkbox(text=u'right handed', group=u'handedness', var=u'handedness')
	checkbox_left = Checkbox(text=u'left handed', group=u'handedness', var=u'handedness')
	label_age = Label(u'Your age')
	# Specify a key filter so that only digits are accepted as text input
	input_age = TextInput(stub=u'Age here …', var=u'age', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1,1], cols=[1,1,1,1])
	
	label_session=Label(u'Session type')
	checkbox_1=Checkbox(text=u'1', group=u'session', var=u'session')
	checkbox_2=Checkbox(text=u'2', group=u'session', var=u'session')
	
	#my_form.set_widget(label_session, (0, 0))
	#my_form.set_widget(checkbox_session1, (1, 0))
	#my_form.set_widget(checkbox_session2, (2, 0))
	#my_form.set_widget(checkbox_session3, (3, 0))
	
	
	
	my_form.set_widget(label_session, (0, 1))
	my_form.set_widget(checkbox_1, (1, 1))
	my_form.set_widget(checkbox_2, (2, 1))
	
	
	my_form.set_widget(label_gender, (0, 2))
	my_form.set_widget(checkbox_male, (1, 2))
	my_form.set_widget(checkbox_female, (2, 2))
	
	my_form.set_widget(label_handedness, (0, 3))
	my_form.set_widget(checkbox_right, (1, 3))
	my_form.set_widget(checkbox_left, (2, 3))
	
	my_form.set_widget(label_age, (0, 4))
	my_form.set_widget(input_age, (1, 4), colspan=2)
	my_form.set_widget(button_ok, (1, 5))
	my_form._exec()
	__end__
	set _prepare ""

define sketchpad Endexperiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You completed the task, thanks for the participation!!" x=0 y=0 z_index=0

define inline_script Log_output
	set description "Executes Python code"
	___run__
	import os
	
	exp._log.close()
	for subject_nr in range(0, 999):
	    path = 'Nutrution_study_VS_Sub_%d_Ses_%s.csv' % (self.get('subject_nr'), self.get('session'))
	    if not os.path.exists(path):
	        break
	print ('Using %s' %path)
	exp.logfile=path
	exp._log=None
	exp.init_log()
	__end__
	set _prepare ""

define sketchpad PracticeTrialsStart
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Practice trials will start immediately when you press a button." x=0 y=0 z_index=0

define inline_script TrialType_
	set description "Executes Python code"
	___run__
	# new initioators for the counters for a experimental loop
	var.trialtype=1
	var.blocknumber=0
	var.trialnumber=0
	var.number_trials_block=36
	__end__
	set _prepare ""

define inline_script Variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	#libraries need for the python.
	import math
	from math import sqrt
	import numpy
	import random 
	import bisect
	#duration of displays
	var.seach_dur=995 #duration of all memoryitems
	var.mask_dur=1995 
	#memoryarray and responsescreen.
	#default values of key variables. each trial these numbers change.
	var.targetorientation=0 #the value of target item, it is retrieved on the prepare phase of the randomorientationaccuracy
	var.trialtype=0 #the first block is practice block, then it becomes experimental blocks after the first block with the code written on TrialTypeNumber2
	var.trialnumber=0 #Trialnumber starts with 0 from the first trial because python starts numbers with 0.
	#default value of blocks and blockbreaks
	var.blocknumber=0
	var.number_trials_block=30 #number of trials within a block
	
	OnsList=[0,var.seach_dur,var.mask_dur]
	
	#Set the invisible circles
	circleradious=[100,150,200]
	var.C1radius=circleradious[0]
	var.C2radius=circleradious[1]
	var.C3radius=circleradious[2]
	__end__

define loop blockloop
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous yes
	set break_if_on_first no
	set break_if never
	setcycle 0 NumberOfItems 5
	setcycle 0 TargetCircle 1
	setcycle 0 TargetOrient 0
	setcycle 1 NumberOfItems 7
	setcycle 1 TargetCircle 1
	setcycle 1 TargetOrient 0
	setcycle 2 NumberOfItems 9
	setcycle 2 TargetCircle 1
	setcycle 2 TargetOrient 0
	setcycle 3 NumberOfItems 5
	setcycle 3 TargetCircle 2
	setcycle 3 TargetOrient 0
	setcycle 4 NumberOfItems 7
	setcycle 4 TargetCircle 2
	setcycle 4 TargetOrient 0
	setcycle 5 NumberOfItems 9
	setcycle 5 TargetCircle 2
	setcycle 5 TargetOrient 0
	setcycle 6 NumberOfItems 5
	setcycle 6 TargetCircle 3
	setcycle 6 TargetOrient 0
	setcycle 7 NumberOfItems 7
	setcycle 7 TargetCircle 3
	setcycle 7 TargetOrient 0
	setcycle 8 NumberOfItems 9
	setcycle 8 TargetCircle 3
	setcycle 8 TargetOrient 0
	setcycle 9 NumberOfItems 5
	setcycle 9 TargetCircle 1
	setcycle 9 TargetOrient 90
	setcycle 10 NumberOfItems 7
	setcycle 10 TargetCircle 1
	setcycle 10 TargetOrient 90
	setcycle 11 NumberOfItems 9
	setcycle 11 TargetCircle 1
	setcycle 11 TargetOrient 90
	setcycle 12 NumberOfItems 5
	setcycle 12 TargetCircle 2
	setcycle 12 TargetOrient 90
	setcycle 13 NumberOfItems 7
	setcycle 13 TargetCircle 2
	setcycle 13 TargetOrient 90
	setcycle 14 NumberOfItems 9
	setcycle 14 TargetCircle 2
	setcycle 14 TargetOrient 90
	setcycle 15 NumberOfItems 5
	setcycle 15 TargetCircle 3
	setcycle 15 TargetOrient 90
	setcycle 16 NumberOfItems 7
	setcycle 16 TargetCircle 3
	setcycle 16 TargetOrient 90
	setcycle 17 NumberOfItems 9
	setcycle 17 TargetCircle 3
	setcycle 17 TargetOrient 90
	setcycle 18 NumberOfItems 5
	setcycle 18 TargetCircle 1
	setcycle 18 TargetOrient 180
	setcycle 19 NumberOfItems 7
	setcycle 19 TargetCircle 1
	setcycle 19 TargetOrient 180
	setcycle 20 NumberOfItems 9
	setcycle 20 TargetCircle 1
	setcycle 20 TargetOrient 180
	setcycle 21 NumberOfItems 5
	setcycle 21 TargetCircle 2
	setcycle 21 TargetOrient 180
	setcycle 22 NumberOfItems 7
	setcycle 22 TargetCircle 2
	setcycle 22 TargetOrient 180
	setcycle 23 NumberOfItems 9
	setcycle 23 TargetCircle 2
	setcycle 23 TargetOrient 180
	setcycle 24 NumberOfItems 5
	setcycle 24 TargetCircle 3
	setcycle 24 TargetOrient 180
	setcycle 25 NumberOfItems 7
	setcycle 25 TargetCircle 3
	setcycle 25 TargetOrient 180
	setcycle 26 NumberOfItems 9
	setcycle 26 TargetCircle 3
	setcycle 26 TargetOrient 180
	setcycle 27 NumberOfItems 5
	setcycle 27 TargetCircle 1
	setcycle 27 TargetOrient 270
	setcycle 28 NumberOfItems 7
	setcycle 28 TargetCircle 1
	setcycle 28 TargetOrient 270
	setcycle 29 NumberOfItems 9
	setcycle 29 TargetCircle 1
	setcycle 29 TargetOrient 270
	setcycle 30 NumberOfItems 5
	setcycle 30 TargetCircle 2
	setcycle 30 TargetOrient 270
	setcycle 31 NumberOfItems 7
	setcycle 31 TargetCircle 2
	setcycle 31 TargetOrient 270
	setcycle 32 NumberOfItems 9
	setcycle 32 TargetCircle 2
	setcycle 32 TargetOrient 270
	setcycle 33 NumberOfItems 5
	setcycle 33 TargetCircle 3
	setcycle 33 TargetOrient 270
	setcycle 34 NumberOfItems 7
	setcycle 34 TargetCircle 3
	setcycle 34 TargetOrient 270
	setcycle 35 NumberOfItems 9
	setcycle 35 TargetCircle 3
	setcycle 35 TargetOrient 270
	run trial_sequence

define logger data_log
	set description "Logs experimental data"
	set auto_log yes

define sketchpad endpractice
	set duration 10
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Practice trials are finished. If you have any questions about the task, don`t hesitate to ask to the researcher. If not, press a button to start experimental trials when you are ready." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run CreateCanvas always
	run Variables always
	run Demographics always
	run Log_output always
	run welcome always
	run PracticeTrialsStart always
	run practicetrials always
	run endpractice always
	run TrialType_ always
	run blockloop always
	run Endexperiment always

define inline_script notes
	set description "Executes Python code"
	___run__
	'''
	akista ucuncu ekranda fix dot var o yuzcen uzuyor, arada onu kaldilarimmi napalim ?
	
	
	'''
	__end__
	set _prepare ""

define loop practicetrials
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if "[trialnumber]=30"
	setcycle 0 NumberOfItems 5
	setcycle 0 TargetCircle 1
	setcycle 0 TargetOrient 0
	setcycle 1 NumberOfItems 7
	setcycle 1 TargetCircle 1
	setcycle 1 TargetOrient 0
	setcycle 2 NumberOfItems 9
	setcycle 2 TargetCircle 1
	setcycle 2 TargetOrient 0
	setcycle 3 NumberOfItems 5
	setcycle 3 TargetCircle 2
	setcycle 3 TargetOrient 0
	setcycle 4 NumberOfItems 7
	setcycle 4 TargetCircle 2
	setcycle 4 TargetOrient 0
	setcycle 5 NumberOfItems 9
	setcycle 5 TargetCircle 2
	setcycle 5 TargetOrient 0
	setcycle 6 NumberOfItems 5
	setcycle 6 TargetCircle 3
	setcycle 6 TargetOrient 0
	setcycle 7 NumberOfItems 7
	setcycle 7 TargetCircle 3
	setcycle 7 TargetOrient 0
	setcycle 8 NumberOfItems 9
	setcycle 8 TargetCircle 3
	setcycle 8 TargetOrient 0
	setcycle 9 NumberOfItems 5
	setcycle 9 TargetCircle 1
	setcycle 9 TargetOrient 90
	setcycle 10 NumberOfItems 7
	setcycle 10 TargetCircle 1
	setcycle 10 TargetOrient 90
	setcycle 11 NumberOfItems 9
	setcycle 11 TargetCircle 1
	setcycle 11 TargetOrient 90
	setcycle 12 NumberOfItems 5
	setcycle 12 TargetCircle 2
	setcycle 12 TargetOrient 90
	setcycle 13 NumberOfItems 7
	setcycle 13 TargetCircle 2
	setcycle 13 TargetOrient 90
	setcycle 14 NumberOfItems 9
	setcycle 14 TargetCircle 2
	setcycle 14 TargetOrient 90
	setcycle 15 NumberOfItems 5
	setcycle 15 TargetCircle 3
	setcycle 15 TargetOrient 90
	setcycle 16 NumberOfItems 7
	setcycle 16 TargetCircle 3
	setcycle 16 TargetOrient 90
	setcycle 17 NumberOfItems 9
	setcycle 17 TargetCircle 3
	setcycle 17 TargetOrient 90
	setcycle 18 NumberOfItems 5
	setcycle 18 TargetCircle 1
	setcycle 18 TargetOrient 180
	setcycle 19 NumberOfItems 7
	setcycle 19 TargetCircle 1
	setcycle 19 TargetOrient 180
	setcycle 20 NumberOfItems 9
	setcycle 20 TargetCircle 1
	setcycle 20 TargetOrient 180
	setcycle 21 NumberOfItems 5
	setcycle 21 TargetCircle 2
	setcycle 21 TargetOrient 180
	setcycle 22 NumberOfItems 7
	setcycle 22 TargetCircle 2
	setcycle 22 TargetOrient 180
	setcycle 23 NumberOfItems 9
	setcycle 23 TargetCircle 2
	setcycle 23 TargetOrient 180
	setcycle 24 NumberOfItems 5
	setcycle 24 TargetCircle 3
	setcycle 24 TargetOrient 180
	setcycle 25 NumberOfItems 7
	setcycle 25 TargetCircle 3
	setcycle 25 TargetOrient 180
	setcycle 26 NumberOfItems 9
	setcycle 26 TargetCircle 3
	setcycle 26 TargetOrient 180
	setcycle 27 NumberOfItems 5
	setcycle 27 TargetCircle 1
	setcycle 27 TargetOrient 270
	setcycle 28 NumberOfItems 7
	setcycle 28 TargetCircle 1
	setcycle 28 TargetOrient 270
	setcycle 29 NumberOfItems 9
	setcycle 29 TargetCircle 1
	setcycle 29 TargetOrient 270
	setcycle 30 NumberOfItems 5
	setcycle 30 TargetCircle 2
	setcycle 30 TargetOrient 270
	setcycle 31 NumberOfItems 7
	setcycle 31 TargetCircle 2
	setcycle 31 TargetOrient 270
	setcycle 32 NumberOfItems 9
	setcycle 32 TargetCircle 2
	setcycle 32 TargetOrient 270
	setcycle 33 NumberOfItems 5
	setcycle 33 TargetCircle 3
	setcycle 33 TargetOrient 270
	setcycle 34 NumberOfItems 7
	setcycle 34 TargetCircle 3
	setcycle 34 TargetOrient 270
	setcycle 35 NumberOfItems 9
	setcycle 35 TargetCircle 3
	setcycle 35 TargetOrient 270
	run trial_sequence

define inline_script randomfixationduration
	set description "Executes Python code"
	___run__
	var.search_acc=0 # initiator for search accuracy variable
	var.searchresponse = 'NaN'
	var.searchRT = 'NaN'
	my_keyboard=Keyboard(keylist=["up", "down", "left", "right"]) #allowed response keys
	# trial start canvas presenatation
	fixcanvas.show()
	self.sleep(var.fixationduration)
	
	#Start images
	t_cur =0
	t0 = clock.time() # initiate timer for T0
	t_end = 300*18 
	resp = []
	RTStamp=[]
	
	while clock.time()-t0 < 3000:	#True: 
		key, timestamps = my_keyboard.get_key(timeout = 0) # allows immediate response for keyboard response and saves response variables as local
		t_cur = clock.time() - t0 # response time substracted from T0 for the determination of early response for a given trial
		stream_cnvs[str((bisect.bisect(OnsList,t_cur)))].show() # presentation of pre-determined stream_cnvs, durations are difined in Onslist variable. 
		if key is not None: 
			var.searchresponse=key # saves response key as global variable
			var.searchRT=timestamps-t0 # saves response time as global variable
			my_keyboard.flush() # clean keyboard inputs
			break # breaks and prepares the varibles for another trial run
	var.T_check = clock.time()-t0
	
	if var.CA==var.searchresponse: # defines search response accuracy then defines the presentation of a feedback screen
	    var.search_acc=1
	    cnvs_positivefeedback.show()
	else:
	    cnvs_negativefeedback.show()
	self.sleep(175)
	
	empty_cnvs.show()
	self.sleep(var.empty_cnsv_dur)
	__end__
	___prepare__
	#initiator for location of the target
	var.C1T_x="NaN"
	var.C1T_y="NaN"
	var.C2T_x="NaN"
	var.C2T_y="NaN"
	var.C3T_x="NaN"
	var.C3T_y="NaN"
	
	#random time for fixation duration
	var.fixationduration=random.randint(300, 500)
	#random time for empty canvas
	var.empty_cnsv_dur= random.randint(5,7)
	
	
	if var.trialnumber%var.number_trials_block==0: # block and trial counter
		var.blocknumber += 1 #var.blocknumber+1
	var.trialnumber += 1 #var.trialnumber+1
	
	var.totalitems=var.NumberOfItems*3 
	Distrotation = random.sample([*range(0,360,90)]*8,var.totalitems) #choses
	
	rand_phi=random.sample(range(0,360),3)#-180,180),3) #defines random location for the C positions
	C1_Positions = xy_circle (n=var.NumberOfItems, rho=circleradious[0], phi0=rand_phi[0])
	C2_Positions = xy_circle (n=var.NumberOfItems, rho=circleradious[1], phi0=rand_phi[1])
	C3_Positions = xy_circle (n=var.NumberOfItems, rho=circleradious[2], phi0=rand_phi[2])
	
	C1_T_loc=C1_Positions[0]
	C2_T_loc=C2_Positions[0]
	C3_T_loc=C3_Positions[0]
	
	targetcount=random.choice(range(0,var.NumberOfItems)) 
	stream_cnvs={} # creats stream canvas as a dictionary
	
	# defines first presentation of stream canvas as "1"
	stream_cnvs['1']=Canvas()
	stream_cnvs['1'].fixdot(color="black") # adds fixation dot 
	count=0 # initiator for count variable
	targeton=1 
	# target window
	for i in range(0, var.NumberOfItems): 
	    x,y=C1_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1: 
	        stream_cnvs['1']['C1Item'+str(i)]=Image(exp.pool['T.png'])
	        stream_cnvs['1']['C1Item'+str(i)].rotation=var.TargetOrient
	        var.C1T_x= C1_T_loc[0]
	        var.C1T_y= C1_T_loc[1] * -1
	        targeton=0
	    else:
	        stream_cnvs['1']['C1Item'+str(i)]=Image(exp.pool['L.png'])	
	        stream_cnvs['1']['C1Item'+str(i)].rotation=Distrotation[count]
	    count=count+1
	    stream_cnvs['1']['C1Item'+str(i)].x=x
	    stream_cnvs['1']['C1Item'+str(i)].y=y    
	    
	    
	    x,y=C2_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1: 
	        stream_cnvs['1']['C2Item'+str(i)]=Image(exp.pool['T.png'])
	        stream_cnvs['1']['C2Item'+str(i)].rotation=var.TargetOrient
	        var.C2T_x= C2_T_loc[0]
	        var.C2T_y= C2_T_loc[1] * -1
	        targeton=0
	    else:
	        stream_cnvs['1']['C2Item'+str(i)]=Image(exp.pool['L.png'])
	        stream_cnvs['1']['C2Item'+str(i)].rotation=Distrotation[count]
	    count=count+1	
	    stream_cnvs['1']['C2Item'+str(i)].x=x
	    stream_cnvs['1']['C2Item'+str(i)].y=y
	    
	    x,y=C3_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1: 
	        stream_cnvs['1']['C3Item'+str(i)]=Image(exp.pool['T.png'])
	        stream_cnvs['1']['C3Item'+str(i)].rotation=var.TargetOrient
	        var.C3T_x= C3_T_loc[0]
	        var.C3T_y= C3_T_loc[1] * -1
	        targeton=0
	    else:
	        stream_cnvs['1']['C3Item'+str(i)]=Image(exp.pool['L.png'])
	        stream_cnvs['1']['C3Item'+str(i)].rotation=Distrotation[count]	
	    stream_cnvs['1']['C3Item'+str(i)].x=x
	    stream_cnvs['1']['C3Item'+str(i)].y=y
	    count=count+1
	
	#Mask presentation
	stream_cnvs['2']=Canvas()
	stream_cnvs['2'].fixdot(color="black")
	count=0
	targeton=1
	for i in range(0, var.NumberOfItems):
	    x,y=C1_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1: 
	        stream_cnvs['2']['C1Item'+str(i)]=Image(exp.pool['Msk.png'])
	        stream_cnvs['2']['C1Item'+str(i)].rotation=var.TargetOrient
	        targeton=0
	    else:
	        stream_cnvs['2']['C1Item'+str(i)]=Image(exp.pool['Msk.png'])	
	        stream_cnvs['2']['C1Item'+str(i)].rotation=Distrotation[count]
	    count=count+1
	    stream_cnvs['2']['C1Item'+str(i)].x=x
	    stream_cnvs['2']['C1Item'+str(i)].y=y    
	    
	    x,y=C2_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1:        
	        stream_cnvs['2']['C2Item'+str(i)]=Image(exp.pool['Msk.png'])   
	        stream_cnvs['2']['C2Item'+str(i)].rotation=var.TargetOrient
	        targeton=0
	    else:
	        stream_cnvs['2']['C2Item'+str(i)]=Image(exp.pool['Msk.png'])
	        stream_cnvs['2']['C2Item'+str(i)].rotation=Distrotation[count]
	    count=count+1	
	    stream_cnvs['2']['C2Item'+str(i)].x=x
	    stream_cnvs['2']['C2Item'+str(i)].y=y
	    
	    x,y=C3_Positions[i] 
	    if ((count%3)+1)==var.TargetCircle and targeton==1: 
	        stream_cnvs['2']['C3Item'+str(i)]=Image(exp.pool['Msk.png'])
	        stream_cnvs['2']['C3Item'+str(i)].rotation=var.TargetOrient
	        targeton=0
	    else:
	        stream_cnvs['2']['C3Item'+str(i)]=Image(exp.pool['Msk.png'])
	        stream_cnvs['2']['C3Item'+str(i)].rotation=Distrotation[count]	
	    stream_cnvs['2']['C3Item'+str(i)].x=x
	    stream_cnvs['2']['C3Item'+str(i)].y=y
	    count=count+1
	    
	# canvas with a fixation dot as a response waiting screen after each trial
	stream_cnvs['3']=Canvas()
	stream_cnvs['3'].fixdot(color="black")
	#Correct definition
	if var.TargetOrient==0:
	    var.CA="up"
	elif var.TargetOrient==90: #if changed with elif
	    var.CA="right"
	elif var.TargetOrient==180:
	    var.CA="down"
	elif var.TargetOrient==270:
	    var.CA="left"
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomfixationduration always
	run data_log always
	run Break "[trialnumber]%[number_trials_block]=0"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome to the Visual Search Task.<br />Here you need to find the T and specify its current orientation as soon as possible. Immediately after being shown, the target and non target items will be covered. <br />You can still give your response after the target and non target items are covered.<br />A new visual search array will appear right after you give your response.  " x=0 y=0 z_index=0

