---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 800
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 600
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\ak10268\\Downloads"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#c0c0c0"

define inline_script Create_Canvas
	set description "Executes Python code"
	set _run ""
	___prepare__
	ISI_cnvs = Canvas()
	
	fix_cnvs = Canvas()
	fix_cnvs.fixdot(color='black')
	
	resp1_cnvs = Canvas()
	resp1_cnvs += Text('Enter Target 1 Identity', color='black', font_size=24, y=0)
	#resp1_cnvs += Image(exp.pool['respnumpad.png'],y=50, scale=0.8)
	
	
	resp2_cnvs = Canvas()
	resp2_cnvs += Text('Enter Target 2 Identity', color='black', font_size=24, y=0)
	#resp2_cnvs += Image(exp.pool['respnumpad.png'],y=50, scale=0.8)
	__end__

define sketchpad EndExperiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The experiment has finished. Thanks for the participation!" x=0 y=0 z_index=0

define loop ExperimentalLoop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 170
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Lag 1
	setcycle 0 T1pos 5
	setcycle 0 T2pos 6
	setcycle 0 T1identity "R.png"
	setcycle 0 T2identity "L.png"
	setcycle 0 T1c 8
	setcycle 0 T2c 7
	setcycle 0 TCInt 9
	setcycle 0 NumberOfItems 2
	setcycle 1 Lag 1
	setcycle 1 T1pos 5
	setcycle 1 T2pos 6
	setcycle 1 T1identity "R.png"
	setcycle 1 T2identity "O.png"
	setcycle 1 T1c 8
	setcycle 1 T2c 2
	setcycle 1 TCInt 5
	setcycle 1 NumberOfItems 2
	setcycle 2 Lag 1
	setcycle 2 T1pos 5
	setcycle 2 T2pos 6
	setcycle 2 T1identity "R.png"
	setcycle 2 T2identity "OL.png"
	setcycle 2 T1c 8
	setcycle 2 T2c 4
	setcycle 2 TCInt 6
	setcycle 2 NumberOfItems 2
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	setcycle 4 Lag 1
	setcycle 4 T1pos 5
	setcycle 4 T2pos 6
	setcycle 4 T1identity "L.png"
	setcycle 4 T2identity "O.png"
	setcycle 4 T1c 7
	setcycle 4 T2c 2
	setcycle 4 TCInt 4
	setcycle 4 NumberOfItems 2
	setcycle 5 Lag 1
	setcycle 5 T1pos 5
	setcycle 5 T2pos 6
	setcycle 5 T1identity "L.png"
	setcycle 5 T2identity "OR.png"
	setcycle 5 T1c 7
	setcycle 5 T2c 5
	setcycle 5 TCInt 6
	setcycle 5 NumberOfItems 2
	setcycle 6 Lag 1
	setcycle 6 T1pos 5
	setcycle 6 T2pos 6
	setcycle 6 T1identity "X.png"
	setcycle 6 T2identity "O.png"
	setcycle 6 T1c 9
	setcycle 6 T2c 2
	setcycle 6 TCInt 6
	setcycle 6 NumberOfItems 2
	setcycle 7 Lag 1
	setcycle 7 T1pos 5
	setcycle 7 T2pos 6
	setcycle 7 T1identity "OL.png"
	setcycle 7 T2identity "R.png"
	setcycle 7 T1c 4
	setcycle 7 T2c 8
	setcycle 7 TCInt 6
	setcycle 7 NumberOfItems 2
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	setcycle 9 Lag 1
	setcycle 9 T1pos 5
	setcycle 9 T2pos 6
	setcycle 9 T1identity "O.png"
	setcycle 9 T2identity "R.png"
	setcycle 9 T1c 2
	setcycle 9 T2c 8
	setcycle 9 TCInt 5
	setcycle 9 NumberOfItems 2
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	setcycle 11 Lag 1
	setcycle 11 T1pos 5
	setcycle 11 T2pos 6
	setcycle 11 T1identity "O.png"
	setcycle 11 T2identity "X.png"
	setcycle 11 T1c 2
	setcycle 11 T2c 9
	setcycle 11 TCInt 6
	setcycle 11 NumberOfItems 2
	setcycle 12 Lag 3
	setcycle 12 T1pos 5
	setcycle 12 T2pos 8
	setcycle 12 T1identity "R.png"
	setcycle 12 T2identity "L.png"
	setcycle 12 T1c 8
	setcycle 12 T2c 7
	setcycle 12 TCInt 9
	setcycle 12 NumberOfItems 2
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	setcycle 24 Lag 8
	setcycle 24 T1pos 5
	setcycle 24 T2pos 13
	setcycle 24 T1identity "R.png"
	setcycle 24 T2identity "L.png"
	setcycle 24 T1c 8
	setcycle 24 T2c 7
	setcycle 24 TCInt 9
	setcycle 24 NumberOfItems 2
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	setcycle 30 Lag 1
	setcycle 30 T1pos 6
	setcycle 30 T2pos 7
	setcycle 30 T1identity "R.png"
	setcycle 30 T2identity "L.png"
	setcycle 30 T1c 8
	setcycle 30 T2c 7
	setcycle 30 TCInt 9
	setcycle 30 NumberOfItems 2
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	setcycle 60 Lag 1
	setcycle 60 T1pos 7
	setcycle 60 T2pos 8
	setcycle 60 T1identity "R.png"
	setcycle 60 T2identity "L.png"
	setcycle 60 T1c 8
	setcycle 60 T2c 7
	setcycle 60 TCInt 9
	setcycle 60 NumberOfItems 2
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	setcycle 90 Lag 1
	setcycle 90 T1pos 8
	setcycle 90 T2pos 9
	setcycle 90 T1identity "R.png"
	setcycle 90 T2identity "L.png"
	setcycle 90 T1c 8
	setcycle 90 T2c 7
	setcycle 90 TCInt 9
	setcycle 90 NumberOfItems 2
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	setcycle 120 Lag 1
	setcycle 120 T1pos 9
	setcycle 120 T2pos 10
	setcycle 120 T1identity "R.png"
	setcycle 120 T2identity "L.png"
	setcycle 120 T1c 8
	setcycle 120 T2c 7
	setcycle 120 TCInt 9
	setcycle 120 NumberOfItems 2
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	setcycle 150 Lag 0
	setcycle 150 T1pos 5
	setcycle 150 T2pos 0
	setcycle 150 T1identity "OR.png"
	setcycle 150 T2identity ""
	setcycle 150 T1c 4
	setcycle 150 T2c ""
	setcycle 150 TCInt ""
	setcycle 150 NumberOfItems 1
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	setcycle 153 Lag 0
	setcycle 153 T1pos 5
	setcycle 153 T2pos 0
	setcycle 153 T1identity "OX.png"
	setcycle 153 T2identity ""
	setcycle 153 T1c 6
	setcycle 153 T2c ""
	setcycle 153 TCInt ""
	setcycle 153 NumberOfItems 1
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	run trial_sequence

define sketchpad PracticeEnd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You completed practice trials. If you have any questions about the study, please call the researcher and the questions. Press a button to start experimental trials. " x=0 y=0 z_index=0

define loop PracticeLoop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 170
	set continuous no
	set break_if_on_first yes
	set break_if "[trialnumber]=32"
	setcycle 0 Lag 1
	setcycle 0 T1pos 5
	setcycle 0 T2pos 6
	setcycle 0 T1identity "R.png"
	setcycle 0 T2identity "L.png"
	setcycle 0 T1c 8
	setcycle 0 T2c 7
	setcycle 0 TCInt 9
	setcycle 0 NumberOfItems 2
	setcycle 1 Lag 1
	setcycle 1 T1pos 5
	setcycle 1 T2pos 6
	setcycle 1 T1identity "R.png"
	setcycle 1 T2identity "O.png"
	setcycle 1 T1c 8
	setcycle 1 T2c 2
	setcycle 1 TCInt 5
	setcycle 1 NumberOfItems 2
	setcycle 2 Lag 1
	setcycle 2 T1pos 5
	setcycle 2 T2pos 6
	setcycle 2 T1identity "R.png"
	setcycle 2 T2identity "OL.png"
	setcycle 2 T1c 8
	setcycle 2 T2c 4
	setcycle 2 TCInt 6
	setcycle 2 NumberOfItems 2
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	setcycle 4 Lag 1
	setcycle 4 T1pos 5
	setcycle 4 T2pos 6
	setcycle 4 T1identity "L.png"
	setcycle 4 T2identity "O.png"
	setcycle 4 T1c 7
	setcycle 4 T2c 2
	setcycle 4 TCInt 4
	setcycle 4 NumberOfItems 2
	setcycle 5 Lag 1
	setcycle 5 T1pos 5
	setcycle 5 T2pos 6
	setcycle 5 T1identity "L.png"
	setcycle 5 T2identity "OR.png"
	setcycle 5 T1c 7
	setcycle 5 T2c 5
	setcycle 5 TCInt 6
	setcycle 5 NumberOfItems 2
	setcycle 6 Lag 1
	setcycle 6 T1pos 5
	setcycle 6 T2pos 6
	setcycle 6 T1identity "X.png"
	setcycle 6 T2identity "O.png"
	setcycle 6 T1c 9
	setcycle 6 T2c 2
	setcycle 6 TCInt 6
	setcycle 6 NumberOfItems 2
	setcycle 7 Lag 1
	setcycle 7 T1pos 5
	setcycle 7 T2pos 6
	setcycle 7 T1identity "OL.png"
	setcycle 7 T2identity "R.png"
	setcycle 7 T1c 4
	setcycle 7 T2c 8
	setcycle 7 TCInt 6
	setcycle 7 NumberOfItems 2
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	setcycle 9 Lag 1
	setcycle 9 T1pos 5
	setcycle 9 T2pos 6
	setcycle 9 T1identity "O.png"
	setcycle 9 T2identity "R.png"
	setcycle 9 T1c 2
	setcycle 9 T2c 8
	setcycle 9 TCInt 5
	setcycle 9 NumberOfItems 2
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	setcycle 11 Lag 1
	setcycle 11 T1pos 5
	setcycle 11 T2pos 6
	setcycle 11 T1identity "O.png"
	setcycle 11 T2identity "X.png"
	setcycle 11 T1c 2
	setcycle 11 T2c 9
	setcycle 11 TCInt 6
	setcycle 11 NumberOfItems 2
	setcycle 12 Lag 3
	setcycle 12 T1pos 5
	setcycle 12 T2pos 8
	setcycle 12 T1identity "R.png"
	setcycle 12 T2identity "L.png"
	setcycle 12 T1c 8
	setcycle 12 T2c 7
	setcycle 12 TCInt 9
	setcycle 12 NumberOfItems 2
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	setcycle 24 Lag 8
	setcycle 24 T1pos 5
	setcycle 24 T2pos 13
	setcycle 24 T1identity "R.png"
	setcycle 24 T2identity "L.png"
	setcycle 24 T1c 8
	setcycle 24 T2c 7
	setcycle 24 TCInt 9
	setcycle 24 NumberOfItems 2
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	setcycle 30 Lag 1
	setcycle 30 T1pos 6
	setcycle 30 T2pos 7
	setcycle 30 T1identity "R.png"
	setcycle 30 T2identity "L.png"
	setcycle 30 T1c 8
	setcycle 30 T2c 7
	setcycle 30 TCInt 9
	setcycle 30 NumberOfItems 2
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	setcycle 60 Lag 1
	setcycle 60 T1pos 7
	setcycle 60 T2pos 8
	setcycle 60 T1identity "R.png"
	setcycle 60 T2identity "L.png"
	setcycle 60 T1c 8
	setcycle 60 T2c 7
	setcycle 60 TCInt 9
	setcycle 60 NumberOfItems 2
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	setcycle 90 Lag 1
	setcycle 90 T1pos 8
	setcycle 90 T2pos 9
	setcycle 90 T1identity "R.png"
	setcycle 90 T2identity "L.png"
	setcycle 90 T1c 8
	setcycle 90 T2c 7
	setcycle 90 TCInt 9
	setcycle 90 NumberOfItems 2
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	setcycle 120 Lag 1
	setcycle 120 T1pos 9
	setcycle 120 T2pos 10
	setcycle 120 T1identity "R.png"
	setcycle 120 T2identity "L.png"
	setcycle 120 T1c 8
	setcycle 120 T2c 7
	setcycle 120 TCInt 9
	setcycle 120 NumberOfItems 2
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	setcycle 150 Lag 0
	setcycle 150 T1pos 5
	setcycle 150 T2pos 0
	setcycle 150 T1identity "OR.png"
	setcycle 150 T2identity ""
	setcycle 150 T1c 4
	setcycle 150 T2c ""
	setcycle 150 TCInt ""
	setcycle 150 NumberOfItems 1
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	setcycle 153 Lag 0
	setcycle 153 T1pos 5
	setcycle 153 T2pos 0
	setcycle 153 T1identity "OX.png"
	setcycle 153 T2identity ""
	setcycle 153 T1c 6
	setcycle 153 T2c ""
	setcycle 153 TCInt ""
	setcycle 153 NumberOfItems 1
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	run trial_sequence

define sketchpad PracticeTrialsStart
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Practice trials will start immediately when you press a button." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press SPACEBAR to start a trial when you see START command." x=0 y=32 z_index=0

define inline_script VariableReset
	set description "Executes Python code"
	___run__
	var.trialtype=1
	var.trialnumber=0
	var.blockno=0
	
	var.number_trials_block=24
	__end__
	set _prepare ""

define inline_script Variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	#libraries need for the python.
	import math
	import numpy
	import random 
	from random import randrange
	from random import randint
	from random import choice
	import numpy as np
	
	distlist=('A','B','C','D','E','F','G','H','J','K','L','M','N','P','R','S','T','U','V','Y','Z')
	
	var.ISI_dur=10 
	var.item_dur=70
	
	#blocknumber
	var.trialnumber=0
	var.blockno=0
	#feedback variables for practice trials
	var.number_trials_block=6 #numberoftrials in a block
	#practice trials=0 and experimental trials=1 
	var.trialtype=0
	__end__

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to this experiment!" x=0 y=0 z_index=0

define feedback breakscreen
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You finished a block of trials. Press a button to continue the experiment." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Variables always
	run Create_Canvas always
	run Welcome always
	run PracticeTrialsStart always
	run PracticeLoop always
	run PracticeEnd always
	run VariableReset always
	run ExperimentalLoop always
	run EndExperiment always

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad trialStart
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=START x=0 y=0 z_index=0

define keyboard_response trialStart_
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trialStart always
	run trialStart_ always
	run trialrun always
	run logger always
	run breakscreen "[trialnumber]%[number_trials_block]=0"

define inline_script trialrun
	set description "Executes Python code"
	___run__
	#initiate keyboard item
	my_keyboard=Keyboard(keylist=["NUM_2", "NUM_4", "NUM_5", "NUM_6", "NUM_7", "NUM_8", "NUM_9", "SPACE"])
		
	
	#fixation dot
	fix_cnvs.show()
	self.sleep(var.fixationduration)
	
	#Shown the stream
	for i in range(0, 20):
		stream_cnvs[str(i)].show()
		self.sleep(var.item_dur)
		ISI_cnvs.show()
		self.sleep(var.ISI_dur)
	ISI_cnvs.show()
	self.sleep(500)				
	
	#Response Collection
	#Response 1
	my_keyboard.flush()
	while True:
		resp1_cnvs.show()
		key, timestamps = my_keyboard.get_key()
		if key is not None and key!="space" :
			var.T1respkey=key
			var.T1_resp=int(var.T1respkey[-1])
			break
		if key == "space" :
			var.T1respkey=key
			var.T1_resp=0
			break
	ISI_cnvs.show()
	self.sleep(250)	
	my_keyboard.flush()
	
	#Response 2
	
	while True:
		resp2_cnvs.show()
		key, timestamps = my_keyboard.get_key()
		if key is not None and key!="space" :
			var.T2respkey=key
			var.T2_resp=int(var.T2respkey[-1])
			break
		if key == "space" :
			var.T2respkey=key
			var.T2_resp=0
			break
	    
	my_keyboard.flush()		
	ISI_cnvs.show()
	self.sleep(250)		
		
	#Dependent variable calculation
	var.T1_acc=0 #T1 accuracy
	var.T2_acc=0 #T2 accuracy
	var.Tint=0	#Target integration
	var.Trev=0	#Order Reversals
	
	#Change depending variables depending on the response
	if var.T1_resp==var.T1c:
		var.T1_acc=1
	if var.T2_resp==var.T2c:
		var.T2_acc=1
	if var.T1_resp==var.T2c and var.T2_resp==var.T1c:
		var.Trev=1
	if var.T1_resp==var.TCInt and var.T2_resp==0:
	    var.Tint=1
	if var.T1_resp==0 and var.T2_resp==var.TCInt:
	    var.Tint=1
	__end__
	___prepare__
	#block number
	if var.trialnumber%var.number_trials_block==0:
		var.blockno=var.blockno+1
	var.trialnumber=var.trialnumber+1
	#random time for fixation duration
	var.fixationduration=random.randint(500, 750)
	
	#mask initilization
	letter2show = np.random.choice(distlist, 20, replace=False)
	
	stream_cnvs = {}
	
	for i in range(0, 20):
		stream_cnvs[str(i)] = Canvas()
		if i==var.T1pos:
			stream_cnvs[str(i)]+=Image(exp.pool[var.T1identity])	
		elif i==var.T2pos and var.NumberOfItems==2:
			stream_cnvs[str(i)]+=Image(exp.pool[var.T2identity])	
		else:
			stream_cnvs[str(i)] += Text(letter2show[i],font_size=48, color='black')
	__end__

